PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': 'a', 'session': '1', 'taskVer': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  expName = rAdaptAlpha4
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Routines
  Routine trial
    MouseComponent trialMouse
      forceEndRoutineOnPress = never
      newClicksOnly = False
      saveMouseState = every frame
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = routine
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    CodeComponent cursorCode
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False

        targetangle = targetAngles[loopCount][trialsLoop.thisN % 2] # targetAngles defined in instruction1
        targetangle_rad = pi*(targetangle/180)
        targetPos = (cos(targetangle_rad)*0.4, sin(targetangle_rad)*0.4-(0.35 * trimmed_height))

        homePos = (0, 0-(0.35 * trimmed_height))

        targetOpacity = 0
        homeOpacity = 0
        #'buffer' circle set up
        bufferOpacity = 0
        bufferRadius = 0
        #allows cursor opacity changing
        cursorOpacity = 1
        cursorPosX = trialMouse.getPos()[0]
        cursorPosY = trialMouse.getPos()[1]

        homeStart = False
        reachOut = False

        trialStep = 1
        steps = []

        #print('trial: '+str(trials1.thisN)+' ('+str(globalClock.getTime())+')')
        trialText.text = str(trialsLoop.thisN+1)

        if phase == 'Align':
            print("Align task")

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)
        elif phase == 'Error Clamped':
            print('Error Clamped Task')

            cursorOpacity = 0

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)

            theta = (targetangle / 180) * pi
        elif (phase == 'Rotated' or phase == 'Inverted'):
            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)

            if (taskVersion == Abrupt):
                setAbruptMainTask()
            elif (taskVersion == Ramped):
                setRampedMainTask()
            elif (taskVersion == Stepped):
                setStepMainTask()
            else:
                setAbruptMainTask() # Contingency condition don't know if this is needed

            if (taskVersion == Abrupt):
                setAbruptInverseTask()
            elif (taskVersion == Ramped):
                setRampedInverseTask()
            elif (taskVersion == Stepped):
                setStepInverseTask()
            else:
                setAbruptInverseTask() # Contingency condition don't know if this is needed

            trialText.text = str(ang)
        else:
            print("Align task")

            trialCursor.pos = (1.5,1.5)
            trialMouse.pos = (1.5,1.5)
      Each Frame:
        CursorTargetDistance = sqrt((trialCursor.pos[0]-trialTarget.pos[0])**2 + (trialCursor.pos[1]-trialTarget.pos[1])**2)
        CursorHomeDistance = sqrt(trialCursor.pos[0]**2 + (trialCursor.pos[1]+(0.35 * trimmed_height))**2)
        steps.append(trialStep)
        # steps.push(step)

        if phase == 'Align':
            cursorPosX = trialMouse.getPos()[0]
            cursorPosY = trialMouse.getPos()[1]

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 1
                if (CursorHomeDistance < .05):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 2
                if (CursorTargetDistance < .05):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 3
                if (CursorHomeDistance < .05):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)
        elif phase == 'Error Clamped':
            cursorPosX = sqrt((trialMouse.getPos()[0]**2)+(trialMouse.getPos()[1]**2))*(cos(theta))
            cursorPosY = sqrt((trialMouse.getPos()[0]**2)+(trialMouse.getPos()[1]**2))*(sin(theta))

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 1
                bufferOpacity = 1
                bufferRadius = 2*(sqrt(trialCursor.pos[0]**2 + trialCursor.pos[1]**2))
                cursorOpacity = 0
                if (CursorHomeDistance < .2):
                    cursorOpacity = 1
                if (CursorHomeDistance < .075):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                trialStep = 2
                bufferOpacity = 0
                cursorOpacity = 1
                if (CursorTargetDistance < .025):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                trialStep = 3
                #COntrols the 'buffer'
                bufferOpacity = 1
                bufferRadius = 2*(sqrt(trialCursor.pos[0]**2 + trialCursor.pos[1]**2))
                #controls the cursor
                cursorOpacity = 0
                if (CursorHomeDistance < .2):
                    cursorOpacity = 1
                if (CursorHomeDistance < .075):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)
        elif (phase == 'Rotated' or phase == 'Inverted'):
            cursorPosX = (trialMouse.getPos()[0]*cos(rtd))-(trialMouse.getPos()[1]*sin(rtd))
            cursorPosY = (trialMouse.getPos()[0]*sin(rtd))+(trialMouse.getPos()[1]*cos(rtd))

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 1
                if (CursorHomeDistance < .05):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 2
                if (CursorTargetDistance < .05):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 3
                if (CursorHomeDistance < .05):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)
        else:
            cursorPosX = trialMouse.getPos()[0]
            cursorPosY = trialMouse.getPos()[1]

            if not(homeStart):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 1
                if (CursorHomeDistance < .05):
                    homeStart = True
                    print('end step 1'+' ('+str(globalClock.getTime())+')')

            if (not(reachOut) and homeStart):
                homeOpacity = 0
                targetOpacity = 1
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 2
                if (CursorTargetDistance < .05):
                    reachOut = True
                    print('end step 2'+' ('+str(globalClock.getTime())+')')

            if (reachOut):
                homeOpacity = 1
                targetOpacity = 0
                cursorOpacity = 1
                bufferOpacity = 0
                trialStep = 3
                if (CursorHomeDistance < .05):
                    # maybe this ends the loop prematurely?
                    print('end step 3'+' ('+str(globalClock.getTime())+')')
                    continueRoutine = False

            #steps = steps.append(step)
      End Routine:
        # thisExp.addData('step', stepvector)
        thisExp.addData('step', steps)
        thisExp.addData('targetangle_deg', targetangle)

        # psychoJS.experiment.addData('columnName', variable)
        #psychoJS.experiment.addData('step', steps)
        #psychoJS.experiment.addData('targetangle_deg', targetangle)
    PolygonComponent trialTarget
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = targetOpacity
      pos [set every frame] = targetPos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialHome
      fillColor = $[1,1,1]
      nVertices = 180
      opacity [set every frame] = homeOpacity
      pos [set every frame] = homePos
      shape = regular polygon...
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent trialCursor
      fillColor = $None
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      opacity [set every frame] = cursorOpacity
      pos [set every frame] = [cursorPosX, cursorPosY]
      shape = regular polygon...
      size = (0.025, 0.025)
      startVal [time (s)] = 0.0
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    VariableComponent trialStep
      startExpValue = 0
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    TextComponent trialText
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
    KeyboardComponent testSkip
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent trialBuff
      fillColor = $None
      lineColor = $[-1.000,-1.000,-1.000]
      nVertices = 180
      opacity [set every frame] = bufferOpacity
      pos [set every frame] = homePos
      shape = regular polygon...
      size [set every frame] = bufferRadius
      startVal [time (s)] = 0.0
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  Routine instruction
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $taskVer
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    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine setup
    TextComponent setupText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Move mouse.Space continue
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    KeyboardComponent setupResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent JSCode
      Code Type = Auto->JS
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    CodeComponent selectCode
      Code Type = Auto->JS
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      Begin Experiment:
        # Do error checking for correct values of taskVer
        try:
            taskVer = int(expInfo['taskVer']) # Check to see if this is safe
        except ValueError:
            taskVer = 0

        # Variables to keep track of the order, rotation and target choices
        orderChoice = taskVer % 6
        rotationChoice = np.floor( taskVer / 12 ) % 2
        targetChoice = np.floor( taskVer / 6) % 2

        # Order
        order = [0,1,2] # Default choice
        if (orderChoice == 0):
            order = [0,1,2]
        elif (orderChoice == 1):
            order = [0,1,3]
        elif (orderChoice == 2):
            order = [0,2,1]
        elif (orderChoice == 3):
            order = [0,2,3]
        elif (orderChoice == 4):
            order = [0,3,1]
        elif (orderChoice == 5):
            order = [0,3,2]

        # Rotation of the mouse angle
        rotation = [1,-1] # Default choice
        if (rotationChoice == 0):
            rotation = [1,-1]
        elif (rotationChoice == 1):
            rotation = [-1,1]

        # Choose set of angles for Main and Inverted task, respectively
        targetAngles = [[40,50],[130,140]] # Default choice
        if (targetChoice == 0):
            targetAngles = [[40,50],[130,140]]
        elif (targetChoice == 1):
            targetAngles = [[130,140],[40,50]]

        screen_width = win.size[0]/win.size[1]
        screen_height = win.size[1]/win.size[1]

        trimmed_width = (2/3) * screen_width
        trimmed_height = (2/3) * screen_height

        if trimmed_height*2 < trimmed_width:
            trimmed_width = trimmed_height*2
        else:
            trimmed_height = trimmed_width/2

        ang = None
        rtd = None

        #Set up rotations and main tasks
        # NOTE: JS isn't automatically converted with global keyword
        def setAbruptMainTask():
            print('Abrupt Main Task')
            ang = rotation[0] * 30
            rtd = ang*(pi/180)

        def setRampedMainTask():
            print('Ramped Main Task')
            if (trials2.thisN <= 47):
                ang = rotation[0] * (trials2.thisN+1)*0.625
            else:
                ang = rotation[0] * 30
            rtd = ang*(pi/180)

        def setStepMainTask():
            print('Step Main Task')
            if (trials2.thisN <= 23):
                ang = rotation[0] * 7.5
            elif (trials2.thisN > 23 and trials2.thisN <= 47):
                ang = rotation[0] * 15
            elif (trials2.thisN > 47 and trials2.thisN <= 71):
                ang = rotation[0] * 22.5
            else:
                ang = rotation[0] * 30
            rtd = ang*(pi/180)

        #Set up inverses
        # Might be possible combine these with the Main task functions
        def setAbruptInverseTask():
            print('Abrupt Inverse Task')
            ang = rotation[1] * 30
            rtd = ang*(pi/180)

        def setRampedInverseTask():
            print('Ramped Inverse Task')
            if (trials2.thisN <= 47):
                ang = rotation[1] * (trials2.thisN+1)*0.625
            else:
                ang = rotation[1] * 30
            rtd = ang*(pi/180)

        def setStepInverseTask():
            print('Step Inverse Task')
            if (trials2.thisN <= 23):
                ang = rotation[1] * 7.5
            elif (trials2.thisN > 23 and trials2.thisN <= 47):
                ang = rotation[1] * 15
            elif (trials2.thisN > 47 and trials2.thisN <= 71):
                ang = rotation[1] * 22.5
            else:
                ang = rotation[1] * 30
            rtd = ang*(pi/180)
  Routine end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Space end.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  LoopInitiator taskLoop loopType="TrialHandler"
    Selected rows = $order
    conditionsFile = taskConds.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'famConds.xlsx'), ('taskVersion', 'Familiarization'), ('taskReps', 24)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Abrupt'), ('taskReps', 160)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Ramped'), ('taskReps', 160)]),
      OrderedDict([('condsFile', 'mainConds.xlsx'), ('taskVersion', 'Stepped'), ('taskReps', 160)])]
    Routine instruction
    LoopInitiator trialsLoop loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = sequential
      nReps = 1
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      Routine trial
    LoopTerminator trialsLoop
  LoopTerminator taskLoop
  Routine end
